---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Sternberg task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 36
set font_italic no
set font_family hindi
set font_bold yes
set experiment_path "C:/Users/HP/Downloads"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define loop Experiment_1
	set source_file "mainTrials.xlsx"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 127
	set continuous yes
	set break_if_on_first yes
	set break_if never
	setcycle 0 block experiment
	setcycle 0 set_size 8
	setcycle 0 letters_set "H, Q, A, Y, E, T, B, W"
	setcycle 0 target O
	setcycle 0 correct_response left
	setcycle 1 block experiment
	setcycle 1 set_size 7
	setcycle 1 letters_set "S, X, J, C, M, P, G"
	setcycle 1 target I
	setcycle 1 correct_response left
	setcycle 2 block experiment
	setcycle 2 set_size 6
	setcycle 2 letters_set "T, R, F, A, N, O"
	setcycle 2 target O
	setcycle 2 correct_response right
	setcycle 3 block experiment
	setcycle 3 set_size 9
	setcycle 3 letters_set "J, Z, M, C, U, H, S, Y, F"
	setcycle 3 target Y
	setcycle 3 correct_response right
	setcycle 4 block experiment
	setcycle 4 set_size 2
	setcycle 4 letters_set "P, L"
	setcycle 4 target G
	setcycle 4 correct_response left
	setcycle 5 block experiment
	setcycle 5 set_size 6
	setcycle 5 letters_set "W, J, A, F, B, V"
	setcycle 5 target L
	setcycle 5 correct_response left
	setcycle 6 block experiment
	setcycle 6 set_size 10
	setcycle 6 letters_set "O, L, K, N, F, M, B, Q, V, Z"
	setcycle 6 target K
	setcycle 6 correct_response right
	setcycle 7 block experiment
	setcycle 7 set_size 8
	setcycle 7 letters_set "C, F, H, R, U, N, E, S"
	setcycle 7 target M
	setcycle 7 correct_response left
	setcycle 8 block experiment
	setcycle 8 set_size 5
	setcycle 8 letters_set "V, A, R, L, C"
	setcycle 8 target L
	setcycle 8 correct_response right
	setcycle 9 block experiment
	setcycle 9 set_size 5
	setcycle 9 letters_set "W, N, O, J, R"
	setcycle 9 target T
	setcycle 9 correct_response left
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	setcycle 126 block ""
	setcycle 126 set_size ""
	setcycle 126 letters_set ""
	setcycle 126 target ""
	setcycle 126 correct_response ""
	run Trial

define sketchpad Fixation
	set duration 1000
	set description "Displays stimuli"

define sketchpad ISI
	set duration 2000
	set description "Displays stimuli"

define sketchpad Instructions1
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-736 y=-160 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=36 html=yes show_if=always text=INSTRUCTIONS x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=24 html=yes show_if=always text="Okay!  Ready for the main experiment? <br /><br />Start" x=0 y=0 z_index=0

define sketchpad Instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=24 html=yes show_if=always text="In this experiment, you will see a series containing letters.<br />After a short delay you will then see a single number.<br />Your job will be decide whether this single letter was in series of letters you saw.<br />Press the Right Key if the number WAS in the series.<br />Press the Left Key if the number was NOT in the series.<br />Before you start the real experiment you will be given a number of practice trials.<br />Try to respond as quickly and accurately as possible.<br />When you are ready to begin press either arrow key" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=24 html=yes show_if=always text=INSTRUCTIONS x=0 y=-288 z_index=0

define sketchpad Memory_set_1
	set duration 1200
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=36 html=yes show_if=always text="[numberSet]" x=0 y=0 z_index=0

define sketchpad Thankyou
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=hindi font_italic=no font_size=36 html=yes show_if=always text="Thank you for your participation " x=0 y=0 z_index=0

define sequence Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation always
	run Memory_set_1 always
	run ISI always
	run probe always
	run new_keyboard_response always
	run logger always
	run feedback_correct "[correct]=1"
	run feedback_incorrect_1 "[correct]=0"
	run break1 "[count_probe]=54"
	run break2 "[count_probe]=96"

define sketchpad break1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Block one complete<br /><br />Take a break<br /><br />When you are ready to continue press either of the arrow keys" x=0 y=0 z_index=0

define sketchpad break2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Block two complete<br /><br />Take a break<br /><br />When you are ready to continue press either of the arrow keys." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_1 always
	run practice_loop always
	run Instructions1 always
	run Experiment_1 always
	run Thankyou always

define sketchpad feedback_correct
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=green font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=correct text="CORRECT " x=0 y=0 z_index=0

define sketchpad feedback_incorrect_1
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=always text=INCORRECT x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response new_keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define loop practice_loop
	set source_file "pracTrials.xlsx"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 block practice
	setcycle 0 set_size 4
	setcycle 0 letters_set "V, A, M, B"
	setcycle 0 target Z
	setcycle 0 correct_response left
	setcycle 1 block practice
	setcycle 1 set_size 7
	setcycle 1 letters_set "S, H, O, B, W, Q, Z"
	setcycle 1 target T
	setcycle 1 correct_response left
	setcycle 2 block practice
	setcycle 2 set_size 9
	setcycle 2 letters_set "B, M, F, Z, P, A, R, W, I"
	setcycle 2 target W
	setcycle 2 correct_response right
	setcycle 3 block practice
	setcycle 3 set_size 6
	setcycle 3 letters_set "D, R, K, X, O, Y"
	setcycle 3 target L
	setcycle 3 correct_response left
	setcycle 4 block practice
	setcycle 4 set_size 6
	setcycle 4 letters_set "U, S, Y, R, G, O"
	setcycle 4 target A
	setcycle 4 correct_response left
	setcycle 5 block practice
	setcycle 5 set_size 8
	setcycle 5 letters_set "O, F, C, R, X, V, M, W"
	setcycle 5 target T
	setcycle 5 correct_response left
	setcycle 6 block practice
	setcycle 6 set_size 6
	setcycle 6 letters_set "F, L, K, P, W, I"
	setcycle 6 target X
	setcycle 6 correct_response left
	setcycle 7 block practice
	setcycle 7 set_size 4
	setcycle 7 letters_set "D, R, L, H"
	setcycle 7 target J
	setcycle 7 correct_response left
	setcycle 8 block practice
	setcycle 8 set_size 8
	setcycle 8 letters_set "H, N, X, V, S, I, C, E"
	setcycle 8 target C
	setcycle 8 correct_response right
	setcycle 9 block practice
	setcycle 9 set_size 10
	setcycle 9 letters_set "S, T, E, V, Y, L, O, N, C, F"
	setcycle 9 target T
	setcycle 9 correct_response right
	setcycle 10 block practice
	setcycle 10 set_size 2
	setcycle 10 letters_set "L,S"
	setcycle 10 target K
	setcycle 10 correct_response left
	setcycle 11 block practice
	setcycle 11 set_size 4
	setcycle 11 letters_set "O,D,L,R"
	setcycle 11 target P
	setcycle 11 correct_response left
	run Trial

define sketchpad probe
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

